# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_140 gabor_054 gabor_089 gabor_021    gabor_140_alt gabor_054_alt gabor_089 gabor_021      "1_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_140_054_089_021_target_position_1_2_retrieval_position_2"          gabor_circ gabor_054_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_176 gabor_101 gabor_154 gabor_122    gabor_176_alt gabor_101 gabor_154 gabor_122_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_176_101_154_122_target_position_1_4_retrieval_position_1"          gabor_176_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_100 gabor_076 gabor_158 gabor_040    gabor_100 gabor_076_alt gabor_158_alt gabor_040      "1_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_100_076_158_040_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2492      fixation_cross    gabor_098 gabor_115 gabor_173 gabor_009    gabor_098_alt gabor_115 gabor_173_alt gabor_009      "1_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_098_115_173_009_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2092      fixation_cross    gabor_151 gabor_179 gabor_101 gabor_119    gabor_151 gabor_179_alt gabor_101 gabor_119_alt      "1_5_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_151_179_101_119_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_170 gabor_064 gabor_013 gabor_097    gabor_170 gabor_064_alt gabor_013 gabor_097_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_170_064_013_097_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_069 gabor_132 gabor_097 gabor_014    gabor_069 gabor_132_alt gabor_097 gabor_014_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_069_132_097_014_target_position_2_4_retrieval_position_2"          gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_037 gabor_110 gabor_064 gabor_154    gabor_037_alt gabor_110_alt gabor_064 gabor_154      "1_8_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_037_110_064_154_target_position_1_2_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1992  2992  2142      fixation_cross    gabor_106 gabor_163 gabor_017 gabor_034    gabor_106 gabor_163_alt gabor_017_alt gabor_034      "1_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_106_163_017_034_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_082_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_005 gabor_049 gabor_156 gabor_025    gabor_005 gabor_049_alt gabor_156 gabor_025_alt     "1_10_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_005_049_156_025_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_072_framed    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_001 gabor_066 gabor_130 gabor_041    gabor_001 gabor_066 gabor_130_alt gabor_041_alt     "1_11_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_001_066_130_041_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_109 gabor_153 gabor_088 gabor_072    gabor_109_alt gabor_153 gabor_088 gabor_072_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_109_153_088_072_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_072_framed    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_120 gabor_102 gabor_033 gabor_084    gabor_120_alt gabor_102 gabor_033 gabor_084_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_120_102_033_084_target_position_1_4_retrieval_position_1"          gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_150 gabor_179 gabor_072 gabor_025    gabor_150_alt gabor_179 gabor_072 gabor_025_alt     "1_14_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_150_179_072_025_target_position_1_4_retrieval_position_1"          gabor_150_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1842  2992  1892      fixation_cross    gabor_001 gabor_044 gabor_122 gabor_172    gabor_001_alt gabor_044 gabor_122_alt gabor_172     "1_15_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_1900_gabor_patch_orientation_001_044_122_172_target_position_1_3_retrieval_position_2"          gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_068 gabor_179 gabor_143 gabor_034    gabor_068_alt gabor_179 gabor_143 gabor_034_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_068_179_143_034_target_position_1_4_retrieval_position_1"          gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_019 gabor_159 gabor_049 gabor_133    gabor_019_alt gabor_159 gabor_049_alt gabor_133     "1_17_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_019_159_049_133_target_position_1_3_retrieval_position_1"          gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_018 gabor_055 gabor_131 gabor_160    gabor_018 gabor_055_alt gabor_131_alt gabor_160     "1_18_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_018_055_131_160_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  2192      fixation_cross    gabor_128 gabor_039 gabor_089 gabor_002    gabor_128 gabor_039_alt gabor_089 gabor_002_alt     "1_19_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_128_039_089_002_target_position_2_4_retrieval_position_1"          gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_128_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_093 gabor_137 gabor_050 gabor_020    gabor_093_alt gabor_137 gabor_050_alt gabor_020     "1_20_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_093_137_050_020_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_062 gabor_145 gabor_093 gabor_029    gabor_062 gabor_145 gabor_093_alt gabor_029_alt     "1_21_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_062_145_093_029_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_148 gabor_173 gabor_012 gabor_065    gabor_148_alt gabor_173_alt gabor_012 gabor_065     "1_22_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_148_173_012_065_target_position_1_2_retrieval_position_2"          gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_132 gabor_011 gabor_100 gabor_063    gabor_132 gabor_011_alt gabor_100_alt gabor_063     "1_23_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_132_011_100_063_target_position_2_3_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_095 gabor_014 gabor_077 gabor_035    gabor_095 gabor_014 gabor_077_alt gabor_035_alt     "1_24_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_095_014_077_035_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_119 gabor_008 gabor_169 gabor_143    gabor_119 gabor_008_alt gabor_169 gabor_143_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_119_008_169_143_target_position_2_4_retrieval_position_2"          gabor_circ gabor_054_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2142      fixation_cross    gabor_044 gabor_008 gabor_027 gabor_074    gabor_044 gabor_008 gabor_027_alt gabor_074_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2150_gabor_patch_orientation_044_008_027_074_target_position_3_4_retrieval_position_1"          gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_052 gabor_097 gabor_079 gabor_124    gabor_052 gabor_097_alt gabor_079 gabor_124_alt     "1_27_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_052_097_079_124_target_position_2_4_retrieval_position_2"          gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_010 gabor_117 gabor_167 gabor_059    gabor_010 gabor_117 gabor_167_alt gabor_059_alt     "1_28_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_010_117_167_059_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_052 gabor_033 gabor_108 gabor_159    gabor_052_alt gabor_033_alt gabor_108 gabor_159     "1_29_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_052_033_108_159_target_position_1_2_retrieval_position_1"          gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  2192      fixation_cross    gabor_053 gabor_175 gabor_158 gabor_142    gabor_053 gabor_175_alt gabor_158_alt gabor_142     "1_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_053_175_158_142_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_095_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_060 gabor_018 gabor_141 gabor_175    gabor_060 gabor_018_alt gabor_141 gabor_175_alt     "1_31_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_060_018_141_175_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_175_framed    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_136 gabor_046 gabor_087 gabor_071    gabor_136_alt gabor_046_alt gabor_087 gabor_071     "1_32_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_136_046_087_071_target_position_1_2_retrieval_position_1"          gabor_136_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_151 gabor_121 gabor_168 gabor_043    gabor_151 gabor_121_alt gabor_168 gabor_043_alt     "1_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_151_121_168_043_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_138 gabor_055 gabor_176 gabor_021    gabor_138_alt gabor_055 gabor_176_alt gabor_021     "1_34_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_138_055_176_021_target_position_1_3_retrieval_position_1"          gabor_138_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_143 gabor_054 gabor_036 gabor_014    gabor_143_alt gabor_054 gabor_036_alt gabor_014     "1_35_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_143_054_036_014_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2192  2992  2442      fixation_cross    gabor_130 gabor_164 gabor_042 gabor_113    gabor_130 gabor_164_alt gabor_042_alt gabor_113     "1_36_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2450_gabor_patch_orientation_130_164_042_113_target_position_2_3_retrieval_position_1"          gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_130_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_061 gabor_105 gabor_028 gabor_089    gabor_061 gabor_105 gabor_028_alt gabor_089_alt     "1_37_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_061_105_028_089_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_167_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_144 gabor_176 gabor_017 gabor_038    gabor_144_alt gabor_176_alt gabor_017 gabor_038     "1_38_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_144_176_017_038_target_position_1_2_retrieval_position_1"          gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_082 gabor_007 gabor_048 gabor_064    gabor_082_alt gabor_007_alt gabor_048 gabor_064     "1_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_082_007_048_064_target_position_1_2_retrieval_position_1"          gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  1992      fixation_cross    gabor_050 gabor_156 gabor_067 gabor_023    gabor_050 gabor_156_alt gabor_067 gabor_023_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2000_gabor_patch_orientation_050_156_067_023_target_position_2_4_retrieval_position_1"          gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_050_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_076 gabor_052 gabor_099 gabor_019    gabor_076_alt gabor_052 gabor_099_alt gabor_019     "1_41_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_076_052_099_019_target_position_1_3_retrieval_position_1"          gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2092      fixation_cross    gabor_060 gabor_096 gabor_036 gabor_075    gabor_060_alt gabor_096_alt gabor_036 gabor_075     "1_42_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_060_096_036_075_target_position_1_2_retrieval_position_2"          gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_124 gabor_179 gabor_146 gabor_093    gabor_124 gabor_179_alt gabor_146_alt gabor_093     "1_43_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_124_179_146_093_target_position_2_3_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_090 gabor_073 gabor_018 gabor_132    gabor_090_alt gabor_073 gabor_018 gabor_132_alt     "1_44_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_090_073_018_132_target_position_1_4_retrieval_position_1"          gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_028 gabor_089 gabor_112 gabor_175    gabor_028_alt gabor_089_alt gabor_112 gabor_175     "1_45_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_028_089_112_175_target_position_1_2_retrieval_position_2"          gabor_circ gabor_089_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2442      fixation_cross    gabor_070 gabor_155 gabor_098 gabor_026    gabor_070_alt gabor_155_alt gabor_098 gabor_026     "1_46_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_070_155_098_026_target_position_1_2_retrieval_position_1"          gabor_070_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1942  2992  2242      fixation_cross    gabor_021 gabor_130 gabor_001 gabor_044    gabor_021 gabor_130_alt gabor_001_alt gabor_044     "1_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2250_gabor_patch_orientation_021_130_001_044_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_149 gabor_174 gabor_021 gabor_111    gabor_149_alt gabor_174_alt gabor_021 gabor_111     "1_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_149_174_021_111_target_position_1_2_retrieval_position_2"          gabor_circ gabor_174_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1792  2992  2042      fixation_cross    gabor_089 gabor_012 gabor_063 gabor_178    gabor_089_alt gabor_012 gabor_063 gabor_178_alt     "1_49_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_089_012_063_178_target_position_1_4_retrieval_position_2"          gabor_circ gabor_012_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_012_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_166 gabor_143 gabor_010 gabor_126    gabor_166 gabor_143_alt gabor_010_alt gabor_126     "1_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_166_143_010_126_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_059_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_069 gabor_008 gabor_048 gabor_085    gabor_069_alt gabor_008_alt gabor_048 gabor_085     "1_51_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_069_008_048_085_target_position_1_2_retrieval_position_1"          gabor_116_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_179 gabor_093 gabor_157 gabor_134    gabor_179 gabor_093_alt gabor_157_alt gabor_134     "1_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_179_093_157_134_target_position_2_3_retrieval_position_2"          gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_161 gabor_075 gabor_021 gabor_001    gabor_161 gabor_075 gabor_021_alt gabor_001_alt     "1_53_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_161_075_021_001_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_049_framed    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2192  2992  2492      fixation_cross    gabor_146 gabor_021 gabor_109 gabor_091    gabor_146_alt gabor_021 gabor_109 gabor_091_alt     "1_54_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2500_gabor_patch_orientation_146_021_109_091_target_position_1_4_retrieval_position_2"          gabor_circ gabor_068_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_068_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_080 gabor_050 gabor_138 gabor_117    gabor_080 gabor_050_alt gabor_138_alt gabor_117     "1_55_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_080_050_138_117_target_position_2_3_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_048 gabor_074 gabor_180 gabor_009    gabor_048_alt gabor_074 gabor_180_alt gabor_009     "1_56_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_048_074_180_009_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_133_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_100 gabor_055 gabor_115 gabor_031    gabor_100 gabor_055 gabor_115_alt gabor_031_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_100_055_115_031_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_071 gabor_178 gabor_004 gabor_143    gabor_071_alt gabor_178 gabor_004_alt gabor_143     "1_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_071_178_004_143_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_047 gabor_104 gabor_079 gabor_024    gabor_047 gabor_104_alt gabor_079_alt gabor_024     "1_59_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_047_104_079_024_target_position_2_3_retrieval_position_2"          gabor_circ gabor_104_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_145 gabor_007 gabor_168 gabor_063    gabor_145_alt gabor_007_alt gabor_168 gabor_063     "1_60_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_145_007_168_063_target_position_1_2_retrieval_position_1"          gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2042  2992  2242      fixation_cross    gabor_131 gabor_047 gabor_008 gabor_164    gabor_131_alt gabor_047 gabor_008_alt gabor_164     "1_61_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_131_047_008_164_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_164_framed    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_164_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_097 gabor_138 gabor_161 gabor_018    gabor_097_alt gabor_138_alt gabor_161 gabor_018     "1_62_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_097_138_161_018_target_position_1_2_retrieval_position_1"          gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_105 gabor_130 gabor_084 gabor_061    gabor_105_alt gabor_130 gabor_084_alt gabor_061     "1_63_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_105_130_084_061_target_position_1_3_retrieval_position_1"          gabor_151_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_155 gabor_138 gabor_078 gabor_026    gabor_155 gabor_138_alt gabor_078_alt gabor_026     "1_64_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_155_138_078_026_target_position_2_3_retrieval_position_2"          gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_120 gabor_035 gabor_156 gabor_094    gabor_120 gabor_035_alt gabor_156 gabor_094_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_120_035_156_094_target_position_2_4_retrieval_position_2"          gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2192      fixation_cross    gabor_112 gabor_136 gabor_174 gabor_063    gabor_112_alt gabor_136 gabor_174_alt gabor_063     "1_66_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_112_136_174_063_target_position_1_3_retrieval_position_2"          gabor_circ gabor_086_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_177 gabor_024 gabor_069 gabor_106    gabor_177_alt gabor_024 gabor_069_alt gabor_106     "1_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_177_024_069_106_target_position_1_3_retrieval_position_1"          gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_025 gabor_092 gabor_180 gabor_069    gabor_025 gabor_092_alt gabor_180_alt gabor_069     "1_68_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_025_092_180_069_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1742  2992  2492      fixation_cross    gabor_180 gabor_164 gabor_029 gabor_046    gabor_180 gabor_164 gabor_029_alt gabor_046_alt     "1_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_180_164_029_046_target_position_3_4_retrieval_position_2"          gabor_circ gabor_114_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_114_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_012 gabor_035 gabor_096 gabor_150    gabor_012_alt gabor_035 gabor_096_alt gabor_150     "1_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_012_035_096_150_target_position_1_3_retrieval_position_1"          gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 