# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_027 gabor_148 gabor_105 gabor_082    gabor_027 gabor_148 gabor_105_alt gabor_082_alt      "2_1_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_027_148_105_082_target_position_1_2_retrieval_position_1"       gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_1_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_120 gabor_165 gabor_011 gabor_056    gabor_120_alt gabor_165_alt gabor_011 gabor_056      "2_2_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_120_165_011_056_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_042 gabor_114 gabor_094 gabor_007    gabor_042_alt gabor_114 gabor_094 gabor_007_alt      "2_3_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_042_114_094_007_target_position_2_3_retrieval_position_2"       gabor_circ gabor_114_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_3_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_172 gabor_130 gabor_091 gabor_062    gabor_172 gabor_130_alt gabor_091 gabor_062_alt      "2_4_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_172_130_091_062_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_043_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_4_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1842  2992  2092      fixation_cross    gabor_147 gabor_121 gabor_078 gabor_061    gabor_147_alt gabor_121 gabor_078 gabor_061_alt      "2_5_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2100_gabor_patch_orientation_147_121_078_061_target_position_2_3_retrieval_position_1"       gabor_100_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_5_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_100_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_106 gabor_177 gabor_071 gabor_131    gabor_106 gabor_177_alt gabor_071 gabor_131_alt      "2_6_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_106_177_071_131_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_6_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_092 gabor_123 gabor_054 gabor_035    gabor_092_alt gabor_123 gabor_054_alt gabor_035      "2_7_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_092_123_054_035_target_position_2_4_retrieval_position_2"       gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_7_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_089 gabor_109 gabor_071 gabor_127    gabor_089 gabor_109 gabor_071_alt gabor_127_alt      "2_8_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_089_109_071_127_target_position_1_2_retrieval_position_2"       gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_8_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_118 gabor_009 gabor_077 gabor_166    gabor_118 gabor_009_alt gabor_077_alt gabor_166      "2_9_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_118_009_077_166_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_031_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  2042      fixation_cross    gabor_135 gabor_110 gabor_049 gabor_022    gabor_135 gabor_110_alt gabor_049_alt gabor_022     "2_10_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_135_110_049_022_target_position_1_4_retrieval_position_2"       gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_10_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_156_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_055 gabor_096 gabor_122 gabor_040    gabor_055 gabor_096_alt gabor_122 gabor_040_alt     "2_11_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_055_096_122_040_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_11_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_014 gabor_162 gabor_130 gabor_093    gabor_014_alt gabor_162_alt gabor_130 gabor_093     "2_12_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_014_162_130_093_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_127 gabor_022 gabor_084 gabor_155    gabor_127 gabor_022_alt gabor_084_alt gabor_155     "2_13_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_127_022_084_155_target_position_1_4_retrieval_position_1"       gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_174 gabor_091 gabor_124 gabor_060    gabor_174 gabor_091_alt gabor_124_alt gabor_060     "2_14_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_174_091_124_060_target_position_1_4_retrieval_position_1"       gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_14_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_165 gabor_004 gabor_110 gabor_085    gabor_165_alt gabor_004 gabor_110_alt gabor_085     "2_15_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_165_004_110_085_target_position_2_4_retrieval_position_2"       gabor_circ gabor_054_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_15_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_078 gabor_054 gabor_160 gabor_095    gabor_078_alt gabor_054 gabor_160_alt gabor_095     "2_16_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_078_054_160_095_target_position_2_4_retrieval_position_2"       gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_16_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_109 gabor_167 gabor_025 gabor_086    gabor_109 gabor_167_alt gabor_025_alt gabor_086     "2_17_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_109_167_025_086_target_position_1_4_retrieval_position_1"       gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_17_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  2592      fixation_cross    gabor_134 gabor_003 gabor_111 gabor_089    gabor_134_alt gabor_003_alt gabor_111 gabor_089     "2_18_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2600_gabor_patch_orientation_134_003_111_089_target_position_3_4_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_18_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_092 gabor_127 gabor_040 gabor_151    gabor_092 gabor_127 gabor_040_alt gabor_151_alt     "2_19_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_092_127_040_151_target_position_1_2_retrieval_position_2"       gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_19_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_173 gabor_058 gabor_117 gabor_144    gabor_173 gabor_058_alt gabor_117_alt gabor_144     "2_20_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_173_058_117_144_target_position_1_4_retrieval_position_1"       gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_20_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_032 gabor_012 gabor_150 gabor_095    gabor_032 gabor_012_alt gabor_150_alt gabor_095     "2_21_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_032_012_150_095_target_position_1_4_retrieval_position_1"       gabor_171_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_21_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_032 gabor_111 gabor_096 gabor_051    gabor_032_alt gabor_111 gabor_096 gabor_051_alt     "2_22_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_032_111_096_051_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_22_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  1992      fixation_cross    gabor_103 gabor_125 gabor_015 gabor_180    gabor_103 gabor_125 gabor_015_alt gabor_180_alt     "2_23_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2000_gabor_patch_orientation_103_125_015_180_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_23_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_161 gabor_143 gabor_127 gabor_076    gabor_161_alt gabor_143 gabor_127_alt gabor_076     "2_24_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_161_143_127_076_target_position_2_4_retrieval_position_2"       gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2042  2992  2242      fixation_cross    gabor_128 gabor_105 gabor_163 gabor_055    gabor_128_alt gabor_105 gabor_163_alt gabor_055     "2_25_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_128_105_163_055_target_position_2_4_retrieval_position_1"       gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_25_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_128_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_019 gabor_034 gabor_086 gabor_058    gabor_019_alt gabor_034 gabor_086_alt gabor_058     "2_26_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_019_034_086_058_target_position_2_4_retrieval_position_2"       gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_26_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_144 gabor_084 gabor_162 gabor_011    gabor_144_alt gabor_084 gabor_162_alt gabor_011     "2_27_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_144_084_162_011_target_position_2_4_retrieval_position_2"       gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_019 gabor_043 gabor_176 gabor_059    gabor_019 gabor_043 gabor_176_alt gabor_059_alt     "2_28_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_019_043_176_059_target_position_1_2_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_28_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_059 gabor_118 gabor_101 gabor_036    gabor_059_alt gabor_118 gabor_101 gabor_036_alt     "2_29_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_059_118_101_036_target_position_2_3_retrieval_position_2"       gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_29_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_159 gabor_103 gabor_026 gabor_043    gabor_159_alt gabor_103_alt gabor_026 gabor_043     "2_30_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_159_103_026_043_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_30_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  2242      fixation_cross    gabor_005 gabor_161 gabor_136 gabor_071    gabor_005 gabor_161 gabor_136_alt gabor_071_alt     "2_31_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2250_gabor_patch_orientation_005_161_136_071_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_104 gabor_014 gabor_125 gabor_039    gabor_104_alt gabor_014_alt gabor_125 gabor_039     "2_32_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_104_014_125_039_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_32_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_151 gabor_024 gabor_088 gabor_177    gabor_151_alt gabor_024 gabor_088_alt gabor_177     "2_33_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_151_024_088_177_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_33_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_064 gabor_174 gabor_031 gabor_138    gabor_064_alt gabor_174 gabor_031_alt gabor_138     "2_34_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_064_174_031_138_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_34_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1792  2992  2242      fixation_cross    gabor_012 gabor_133 gabor_073 gabor_028    gabor_012 gabor_133_alt gabor_073 gabor_028_alt     "2_35_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2250_gabor_patch_orientation_012_133_073_028_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_35_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_026 gabor_043 gabor_104 gabor_167    gabor_026_alt gabor_043 gabor_104_alt gabor_167     "2_36_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_026_043_104_167_target_position_2_4_retrieval_position_2"       gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_077 gabor_002 gabor_156 gabor_032    gabor_077 gabor_002_alt gabor_156_alt gabor_032     "2_37_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_077_002_156_032_target_position_1_4_retrieval_position_1"       gabor_077_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_071 gabor_030 gabor_087 gabor_113    gabor_071_alt gabor_030_alt gabor_087 gabor_113     "2_38_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_071_030_087_113_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_38_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_060 gabor_076 gabor_038 gabor_098    gabor_060_alt gabor_076 gabor_038_alt gabor_098     "2_39_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_060_076_038_098_target_position_2_4_retrieval_position_2"       gabor_circ gabor_076_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2242  2992  1942      fixation_cross    gabor_017 gabor_078 gabor_042 gabor_002    gabor_017_alt gabor_078 gabor_042_alt gabor_002     "2_40_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_017_078_042_002_target_position_2_4_retrieval_position_1"       gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_40_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_017_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_017 gabor_073 gabor_101 gabor_042    gabor_017_alt gabor_073 gabor_101 gabor_042_alt     "2_41_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_017_073_101_042_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_41_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_009 gabor_049 gabor_065 gabor_129    gabor_009_alt gabor_049 gabor_065_alt gabor_129     "2_42_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_009_049_065_129_target_position_2_4_retrieval_position_2"       gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_42_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_041 gabor_020 gabor_094 gabor_126    gabor_041 gabor_020_alt gabor_094 gabor_126_alt     "2_43_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_041_020_094_126_target_position_1_3_retrieval_position_1"       gabor_178_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_43_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_036 gabor_177 gabor_144 gabor_018    gabor_036 gabor_177_alt gabor_144_alt gabor_018     "2_44_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_036_177_144_018_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_44_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_166 gabor_144 gabor_099 gabor_031    gabor_166_alt gabor_144_alt gabor_099 gabor_031     "2_45_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_166_144_099_031_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_054_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_45_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_160 gabor_107 gabor_175 gabor_038    gabor_160 gabor_107_alt gabor_175_alt gabor_038     "2_46_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_160_107_175_038_target_position_1_4_retrieval_position_1"       gabor_021_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_46_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_099 gabor_034 gabor_058 gabor_165    gabor_099_alt gabor_034 gabor_058 gabor_165_alt     "2_47_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_099_034_058_165_target_position_2_3_retrieval_position_2"       gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_47_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  2092      fixation_cross    gabor_125 gabor_177 gabor_007 gabor_151    gabor_125_alt gabor_177_alt gabor_007 gabor_151     "2_48_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2100_gabor_patch_orientation_125_177_007_151_target_position_3_4_retrieval_position_2"       gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_48_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_061 gabor_167 gabor_032 gabor_095    gabor_061_alt gabor_167 gabor_032 gabor_095_alt     "2_49_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_061_167_032_095_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_49_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_033 gabor_144 gabor_056 gabor_121    gabor_033 gabor_144_alt gabor_056_alt gabor_121     "2_50_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_033_144_056_121_target_position_1_4_retrieval_position_1"       gabor_033_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_50_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_166 gabor_085 gabor_013 gabor_050    gabor_166_alt gabor_085 gabor_013 gabor_050_alt     "2_51_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_166_085_013_050_target_position_2_3_retrieval_position_2"       gabor_circ gabor_085_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_51_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2242  2992  2392      fixation_cross    gabor_099 gabor_120 gabor_166 gabor_034    gabor_099_alt gabor_120 gabor_166 gabor_034_alt     "2_52_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2400_gabor_patch_orientation_099_120_166_034_target_position_2_3_retrieval_position_1"       gabor_099_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_52_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_001 gabor_025 gabor_135 gabor_082    gabor_001 gabor_025 gabor_135_alt gabor_082_alt     "2_53_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_001_025_135_082_target_position_1_2_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_53_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_049 gabor_022 gabor_111 gabor_174    gabor_049_alt gabor_022 gabor_111_alt gabor_174     "2_54_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_049_022_111_174_target_position_2_4_retrieval_position_2"       gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_54_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_043 gabor_058 gabor_026 gabor_163    gabor_043_alt gabor_058_alt gabor_026 gabor_163     "2_55_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_043_058_026_163_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_55_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_056 gabor_096 gabor_038 gabor_119    gabor_056_alt gabor_096_alt gabor_038 gabor_119     "2_56_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_056_096_038_119_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_56_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_026 gabor_169 gabor_080 gabor_141    gabor_026_alt gabor_169_alt gabor_080 gabor_141     "2_57_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_026_169_080_141_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_57_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  2492      fixation_cross    gabor_149 gabor_039 gabor_171 gabor_129    gabor_149_alt gabor_039_alt gabor_171 gabor_129     "2_58_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2500_gabor_patch_orientation_149_039_171_129_target_position_3_4_retrieval_position_2"       gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_58_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_068 gabor_045 gabor_105 gabor_154    gabor_068_alt gabor_045 gabor_105_alt gabor_154     "2_59_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_068_045_105_154_target_position_2_4_retrieval_position_2"       gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_59_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_045 gabor_064 gabor_013 gabor_126    gabor_045 gabor_064_alt gabor_013_alt gabor_126     "2_60_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_045_064_013_126_target_position_1_4_retrieval_position_1"       gabor_045_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_60_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_024 gabor_178 gabor_138 gabor_071    gabor_024 gabor_178_alt gabor_138 gabor_071_alt     "2_61_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_024_178_138_071_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_61_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_096 gabor_054 gabor_076 gabor_135    gabor_096_alt gabor_054_alt gabor_076 gabor_135     "2_62_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_096_054_076_135_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_62_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1742  2992  2042      fixation_cross    gabor_166 gabor_096 gabor_057 gabor_009    gabor_166 gabor_096_alt gabor_057 gabor_009_alt     "2_63_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_166_096_057_009_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_009_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_63_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_009_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_076 gabor_015 gabor_030 gabor_102    gabor_076_alt gabor_015_alt gabor_030 gabor_102     "2_64_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_076_015_030_102_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_165_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_64_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_125 gabor_006 gabor_162 gabor_051    gabor_125_alt gabor_006_alt gabor_162 gabor_051     "2_65_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_125_006_162_051_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_096_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  2542      fixation_cross    gabor_037 gabor_127 gabor_016 gabor_053    gabor_037_alt gabor_127 gabor_016 gabor_053_alt     "2_66_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2550_gabor_patch_orientation_037_127_016_053_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_66_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_102 gabor_025 gabor_087 gabor_067    gabor_102_alt gabor_025 gabor_087 gabor_067_alt     "2_67_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_102_025_087_067_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_67_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_018 gabor_094 gabor_066 gabor_155    gabor_018_alt gabor_094 gabor_066_alt gabor_155     "2_68_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_018_094_066_155_target_position_2_4_retrieval_position_2"       gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_68_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_112 gabor_139 gabor_178 gabor_051    gabor_112 gabor_139 gabor_178_alt gabor_051_alt     "2_69_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_112_139_178_051_target_position_1_2_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_69_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2042  2992  2492      fixation_cross    gabor_037 gabor_121 gabor_053 gabor_087    gabor_037_alt gabor_121 gabor_053 gabor_087_alt     "2_70_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2500_gabor_patch_orientation_037_121_053_087_target_position_2_3_retrieval_position_1"       gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_70_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_037_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  